PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['CID'], expName, expInfo['date'])
  Experiment info = {'CID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = GNG_v3
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Routines
  Routine prac_trials
    TextComponent stimTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $stim
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    CodeComponent stimRespCode
      Code Type = Py
      Begin Experiment:
        feedbackCol=[1,1,1]
      Begin Routine:
        prevButtonState = [0, 0, 0]
        pressed=False
        feedbackMsg=''
        correct=0
      Each Frame:
        buttons = mouse.getPressed()
        if buttons != prevButtonState and not pressed:
            pressed=True
        if pressed:
            if respond==0:
                correct=0
                feedbackMsg='Incorrect'
                feedbackCol=[1,1,-1]
            elif respond==1:
                correct=1
                feedbackMsg='Correct'
                feedbackCol=[-1,0,1]
        else:
            if respond==0:
                correct=1
                feedbackMsg='Correct'
                feedbackCol=[-1,0,1]
            if respond==1:
                correct=0
                feedbackMsg=''

        thisExp.addData('correct', correct)
    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine prac_feedback
    TextComponent feedbackTxt
      color [set every repeat] = $feedbackCol
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $feedbackMsg
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  Routine instructions
    TextComponent instr1Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please position your right hand comfortably such that you can reach the left mouse button.

        The experiment begins by presenting a set of letters that you need to remember. They will be presented for 6 seconds, and then disappear.

        A series of random single letters will then appear. As each one is presented you need to respond to each letter UNLESS it was one of the ones you were asked to remember.

        So...

        Press the spacebar to turn the page
    KeyboardComponent inst1Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent select_file
      Code Type = Py
      Begin Experiment:
        ID = int(expInfo['CID']) #turn string CID into numbers without decimals
        runThrough = 1
      Begin Routine:
        # set up parameters for version A or B
        win.mouseVisible = False
        prac_playlist = 'practice_session.csv'
        if (ID % 2) == 0:
            if runThrough==1:
                GNG_version='GNG_A'
                stimDur = 1
                itiDur = 0.5
            elif runThrough==2:
                GNG_version='GNG_B'
                prac_playlist = 'practice_versionB.csv'
                stimDurPrac=0.75
                stimDur = 0.9
                itiDur = 0.1
        else:
            if runThrough==1:
                GNG_version='GNG_B'
                stimDur = 0.9
                itiDur = 0.1
            elif runThrough==2:
                GNG_version='GNG_A'
                stimDur = 1
                itiDur = 0.5
  Routine prac_list
    TextComponent practiceListTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $pracLetters
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  Routine real_trials
    TextComponent stimTxt2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
      text [set every repeat] = $stim
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    CodeComponent stimRespCode_2
      Code Type = Py
      Begin Routine:
        prevButtonState = [0, 0, 0]
        pressed=False
        feedbackMsg=''
        correct=0
      Each Frame:
        buttons = mouse_2.getPressed()
        if buttons != prevButtonState and not pressed:
            pressed=True
        if pressed:
            if respond==0:
                correct=0
                feedbackMsg='Incorrect'
            elif respond==1:
                correct=1
                feedbackMsg='Correct'
        else:
            if respond==0:
                correct=1
                feedbackMsg='Correct'
            if respond==1:
                correct=0
                feedbackMsg=''

        thisExp.addData('correct', correct)
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimDur
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  Routine trial_list
    TextComponent realListTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $realLetters
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  Routine prac_fx
    TextComponent fxTxt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = +
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  Routine real_recall
    TextComponent Qtext2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please type in the letter(s) from the memory list you just completed.
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    TextComponent letter1Txt
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $showLetters
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    TextComponent con2Txt
      letterHeight = 0.05
      opacity [set every repeat] = $contExp
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue with the experiment
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        resp = key_resp_2.keys
        #print(idx)
        if nLetters > 1:
            if idx > 0 and resp == 'backspace':
                idx -= 1
                letters[idx] = ''
            elif idx < nLetters:
                letters[idx] = resp
                letters[idx] = letters[idx].upper()
                idx += 1
            else:
                contExp=1
                if resp=='space':
                    recall_loop2.finished=True
        else:
            if idx > 0 and resp == 'backspace':
                idx -= 1
                letters[idx] = ''
            elif idx < nLetters:
                letters[idx] = resp
                letters[idx] = letters[idx].upper()
                idx += 1
            else:
                contExp=1
                if resp=='space':
                    recall_loop2.finished=True


        showLetters = " ".join(letters)
  Routine prac_recall
    TextComponent Qtext
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Well done. The last part of each trial is to type in the letters of the memory list. You can type them in any order, and if you make a mistake use the backspace to correct it. Please type in the letter(s) from the memory list you just completed. 
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    TextComponent pracletterTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $showLetters
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    TextComponent conTxt
      letterHeight = 0.04
      opacity [set every frame] = $contExp
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue with the experiment
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        idx = 0
        contExp=0
        showLetters=''
      End Routine:
        resp = key_resp.keys


        #letters is length 2 and idx starts at 0

        if idx > 0 and resp == 'backspace':
            idx -= 1
            letters[idx] = ''
        elif idx < nLetters:
            letters[idx] = resp
            letters[idx] = letters[idx].upper()
            idx += 1
        else:
            contExp=1
            if resp=='space':
                recall_loop1.finished=True

        showLetters = " ".join(letters)






        #if idx==0:
        #    letters[idx]=resp
        #    letters = letters.upper()
        #    idx += 1
        #else:
        #    if len(letters)==idx:
        #        letters.append(resp)
        #        letters = letters.upper()
        #        idx += 1
        #if len(letters)==2:
        #    contExp=1
        #    if resp=='space':
        #        recall_loop1.finished=True


        #if idx > 0 and resp == 'backspace':
        #    idx -= 1
        #    letters[idx] = ''
        #elif idx < 2:
        #    letters[idx] = resp
        #    letters[idx] = letters[idx].upper()
        #    idx += 1
        #else:
        #    contExp=1
        #    if resp=='space':
        #        recall_loop1.finished=True
  Routine instructions_2
    TextComponent instr2Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Press the left mouse button when the letter DID NOT come from the list you were asked to remember

        or

        do not press anything if the letter was one of the ones you were asked to remember.



        Press the spacebar to begin practicing
    KeyboardComponent instr2Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_prep2
      Code Type = Py
      Begin Routine:
        import pandas as pd

        df = pd.read_csv(prac_playlist)
        idx=df['respond']==0
        df = df[idx]

        values = pd.unique(df['stim'])
        pracLetters = " ".join(values)

        nLetters = len("".join(values))
        letters = [''] * nLetters
        showLetters = ''

        idx = 0

        thisExp.addData('memoryList', pracLetters)
  Routine instructions_3
    TextComponent instr3Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Well Done. You have completed the practice trials and the experimental trials will now begin.

        The task remains the same except that the number of letters in the memory list change for each run, ranging between 1 and 6 letters.


        Please press the spacebar to turn the page
    KeyboardComponent inst3Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent store_prac
      Code Type = Py
      Begin Routine:
        thisExp.addData('responseList', showLetters)
  Routine instructions_4
    TextComponent instr4Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your responses to the trials remain the same as you practiced:

        Press left mouse button when the presented letter does NOT match any of the letters in the memory list
        or
        withold your response when the presented letter matches ANY of the letters in the memory list,


        Please press the space bar when you are ready to begin
    KeyboardComponent inst4Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cooldown
    TextComponent clTxt2
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $cooldownText
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    TextComponent clTimer
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every frame]:
        $str(int(routineTimer.getTime()))
    CodeComponent setEndTxt
      Code Type = Py
      Begin Routine:
        #save pevious output
        thisExp.addData('responseList', showLetters)

        #specify text for next run or end of experiment
        if runThrough==1:
            endTxt = "Well done. You have finished the first run of the experiment.\n\nPlease take a moment to relax before continuing. In the next part you will repeat this experiment using different letters. Please press the spacebar when you are ready to continue."
        elif runThrough==2:
            endTxt = "You have now finished the experiment. Thank you!\n\nPlease remember to check the tutorial on submitting your output your output.\n\nPress the spacebar to exit the experiment."
  Routine trial_fx
    TextComponent fx3Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = +
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  Routine cooldown_fx
    TextComponent fx5Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent endRun
      Code Type = Py
  Routine loopPrep
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if (ID % 2) == 0:
            if runThrough==1:
                GNG_version='GNG_A'
                stimDur = 1
                itiDur = 0.5
            elif runThrough==2:
                GNG_version='GNG_B'
                stimDur = 0.9
                itiDur = 0.1
        else:
            if runThrough==1:
                GNG_version='GNG_B'
                stimDur = 0.9
                itiDur = 0.1
            elif runThrough==2:
                GNG_version='GNG_A'
                stimDur = 1
                itiDur = 0.5


        import pandas as pd
        # this makes the path to the relevant playlist
        playlist='playlists/' + GNG_version + '_' + order + '.csv'
        df = pd.read_csv(playlist)
        # get the target letters to memorise
        idx=df['respond']==0
        df = df[idx]

        values = pd.unique(df['stim'])
        nLetters = len("".join(values))
        realLetters = " ".join(values)

        letters = [''] * nLetters
        showLetters = ''

        idx = 0
        contExp = 0
        thisExp.addData('memoryList', realLetters)
      End Routine:
        #print(blocks.thisTrialN)
        if blocks.thisTrialN < 5:
            cooldownText="Well done, there will now be a 20 second break to relax. \n\nWhen the timer finishes you will start another set of trials with a different memory list."
        else:
            cooldownText="Well done, there will now be a 20 second break to relax."
    TextComponent fx2Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine iti
    TextComponent feedbackTxt2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itiDur
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  Routine post_trial
    TextComponent fx4Txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine nextRun
    TextComponent nextTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $endTxt
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    KeyboardComponent nextKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent nxtRun
      Code Type = Py
      End Routine:
        runThrough=2
Flow
  Routine instructions
  Routine instructions_2
  Routine prac_list
  Routine prac_fx
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice_session.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'practice'), ('trialNo', 1), ('stim', 'Y'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 2), ('stim', 'M'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 3), ('stim', 'Z'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 4), ('stim', 'W'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 5), ('stim', 'Y'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 6), ('stim', 'K'), ('respond', 0)]),
      OrderedDict([('type', 'practice'), ('trialNo', 7), ('stim', 'P'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 8), ('stim', 'B'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 9), ('stim', 'Q'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 10), ('stim', 'D'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 11), ('stim', 'X'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 12), ('stim', 'E'), ('respond', 0)]),
      OrderedDict([('type', 'practice'), ('trialNo', 13), ('stim', 'P'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 14), ('stim', 'G'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 15), ('stim', 'H'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 16), ('stim', 'C'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 17), ('stim', 'Y'), ('respond', 1)]),
      OrderedDict([('type', 'practice'), ('trialNo', 18), ('stim', 'G'), ('respond', 1)])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
    Routine prac_trials
    Routine prac_feedback
  LoopTerminator practice
  LoopInitiator recall_loop1 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 50
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    Routine prac_recall
  LoopTerminator recall_loop1
  Routine instructions_3
  LoopInitiator runs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine instructions_4
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = block_order.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine loopPrep
      Routine trial_list
      Routine trial_fx
      LoopInitiator allTrials loopType="TrialHandler"
        conditionsFile = $playlist
        loopType = sequential
        nReps = 1
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        Routine real_trials
        Routine iti
      LoopTerminator allTrials
      Routine post_trial
      LoopInitiator recall_loop2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 50
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        Routine real_recall
      LoopTerminator recall_loop2
      Routine cooldown
      Routine cooldown_fx
    LoopTerminator blocks
    Routine nextRun
  LoopTerminator runs
